run("Grid/Collection stitching", "type=[Grid: snake by rows] order=[Right & Down] grid_size_x=3 grid_size_y=2 tile_overlap=10 first_file_index_i=1 directory=C:\\Users\\BMOadmin2\\Documents\\Images\\Sung\\407_cuploid_assembloid_wet\\CCP-BRM_GoodSample_exp125ms_mag10X file_names=Focus_Stack_{iii}.tif output_textfile_name=TileConfiguration.txt fusion_method=[Linear Blending] regression_threshold=0.05 max/avg_displacement_threshold=2.50 absolute_displacement_threshold=3.50 compute_overlap computation_parameters=[Save memory (but be slower)] image_output=[Write to disk] output_directory=C:\\Users\\BMOadmin2\\Documents\\Images\\Sung\\407_cuploid_assembloid_wet\\CCP-BRM_GoodSample_exp125ms_mag10X");saveAs("Tiff", "C:\\Users\\BMOadmin2\\Documents\\Images\\Sung\\407_cuploid_assembloid_wet\\CCP-BRM_GoodSample_exp125ms_mag10Xfused.tif");close()