run("Grid/Collection stitching", "type=[Grid: snake by rows] order=[Right & Down                ] grid_size_x=4 grid_size_y=4 tile_overlap=10 first_file_index_i=1 directory=C:/Users/BMOadmin2/Documents/Images/Rosene/Sample_Prep_paper/Drying/Overnight/Before/ROI_transition1/High_res_CCP_exp30ms_mag40X file_names=Focus_stack_{iii}.tif output_textfile_name=TileConfiguration.txt fusion_method=[Linear Blending] regression_threshold=0.05 max/avg_displacement_threshold=2.50 absolute_displacement_threshold=3.50 compute_overlap computation_parameters=[Save memory (but be slower)] image_output=[Write to disk] output_directory=C:/Users/BMOadmin2/Documents/Images/Rosene/Sample_Prep_paper/Drying/Overnight/Before/ROI_transition1/High_res_CCP_exp30ms_mag40X");
